PsychoPy2experiment version="2020.2.9"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.5
  Window size (pixels) = [1920, 1080]
  expName = new_STLI_updated_removed4hz
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press the Space key to start the experiment
    KeyboardComponent Welcome_enter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        End
  Routine Break
    TextComponent text_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Time for a break

        Press either of the keys "v" , "b" or "n" to continue when ready
    KeyboardComponent key_resp_2
      allowedKeys = 'v','n','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rsvp_f1
    ImageComponent Presentation_image_f1_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ParallelOutComponent EEG_trigger_f1
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine choice
    PolygonComponent Fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Topleft
      image [set every repeat] = $imageTL
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Topright
      image [set every repeat] = $imageTR
      pos = (0.25 , 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomleft
      image [set every repeat] = $imageBL
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomright
      image [set every repeat] = $imageBR
      pos = (0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','z','k','m'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine rsvp_f2
    ImageComponent Presentation_image_f2_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.45
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    ParallelOutComponent EEG_trigger_f2
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f3
    ImageComponent Presentation_image_f3_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.30
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    ImageComponent Presentation_image_f3_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent EEG_trigger_f3
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine Cross_and_control
    PolygonComponent Crossm
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent Freq_choice_control
      Code Type = Py
      Begin Routine:
        dofone = 0
        doftwo = 0
        dofthree = 0

        if frequency == 1:
            dofone = 1
            doftwo = 0
            dofthree = 0


        elif frequency == 2:
            dofone = 0
            doftwo = 1
            dofthree = 0


        elif frequency == 3:
            dofone = 0
            doftwo = 0
            dofthree = 1
  Routine rsvp_f4
    ImageComponent Presentation_image_f4_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.20
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    ImageComponent Presentation_image_f4_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 1.50
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.50
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_13
      image [set every repeat] = $imagethirteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f3_14
      image [set every repeat] = $imagefourteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_15
      image [set every repeat] = $imagefifteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_16
      image [set every repeat] = $imagesixteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.75
      stopVal [duration (s)] = 0.2
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    ParallelOutComponent EEG_trigger_f4
      address = 0xD010
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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Flow
  Routine Welcome
  LoopInitiator block_one loopType="TrialHandler"
    conditionsFile = stim_present_data_block_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_231.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_155.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_152.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_50.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_76.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_94.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_217.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_153.jpg'), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefif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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_111.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_97.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_4.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_233.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', '    1'), ('imageTL', 'LZ_noise\\LZ_noise_155.jpg'), ('imageBL', 'LZ_noise\\LZ_noise_84.jpg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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_7.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_181.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_128.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_32.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_179.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_190.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_77.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_130.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_173.jpg'), ('imageten', 'LZ_natural\\LZ_natural_148.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_194.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_136.jpg'), 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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_165.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_234.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_13.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_104.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_41.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_217.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_216.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_132.jpg'), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen'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
    Routine Cross_and_control
    LoopInitiator fone_control_b1 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b1
    LoopInitiator ftwo_control_b1 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b1
    LoopInitiator fthree_control_b1 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b1
    Routine choice
  LoopTerminator block_one
  Routine Break
  LoopInitiator block_two loopType="TrialHandler"
    conditionsFile = stim_present_data_block_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_noise\\LZ_noise_185.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_153.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_125.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_22.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_171.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_10.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_162.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_92.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_211.jpg'), ('imageten', 'LZ_noise\\LZ_noise_122.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_172.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_65.jpg'), ('imagethirteen', '     '), ('imagefourteen', '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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_193.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_78.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_16.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_65.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_218.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_185.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_139.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_221.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_76.jpg'), ('imageten', 'LZ_natural\\LZ_natural_140.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_205.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_35.jpg'), (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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_77.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_130.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_230.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_81.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_60.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_98.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_9.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_40.jpg'), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen'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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_215.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_136.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_94.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_33.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_201.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_42.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_229.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_238.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_13.jpg'), ('imageten', 'LZ_noise\\LZ_noise_216.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_175.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_203.jpg'), ('imagethirteen', '     '), ('imagefourteen', ' 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
    Routine Cross_and_control
    LoopInitiator fone_control_b2 loopType="TrialHandler"
      loopType = random
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b2
    LoopInitiator ftwo_control_b2 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b2
    LoopInitiator fthree_control_b2 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b2
    Routine choice
  LoopTerminator block_two
  Routine Break
  LoopInitiator block_three loopType="TrialHandler"
    conditionsFile = stim_present_data_block_3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_157.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_28.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_225.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_111.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_74.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_133.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_186.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_85.jpg'), ('imagenine', 'LZ_scrambled\\LZ_scrambled_169.jpg'), ('imageten', 'LZ_scrambled\\LZ_scrambled_117.jpg'), ('imageeleven', 'LZ_scrambled\\LZ_scrambled_149.jpg'), ('ima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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_114.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_117.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_96.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_90.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_45.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_5.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_77.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_128.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_136.jpg'), ('imageten', 'LZ_noise\\LZ_noise_94.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_176.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_29.jpg'), ('imagethirteen', '     '), ('imagefourteen', '     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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_200.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_38.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_82.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_237.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_49.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_54.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_153.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_113.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_30.jpg'), ('imageten', 'LZ_natural\\LZ_natural_120.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_127.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_60.jpg'), ('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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_42.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_218.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_152.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_156.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_2.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_147.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_87.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_216.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_226.jpg'), ('imageten', 'LZ_noise\\LZ_noise_81.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_225.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_162.jpg'), ('imagethirteen', '     '), ('imagefourteen', '  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
    Routine Cross_and_control
    LoopInitiator fone_control_b3 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b3
    LoopInitiator ftwo_control_b3 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b3
    LoopInitiator fthree_control_b3 loopType="TrialHandler"
      loopType = random
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b3
    Routine choice
  LoopTerminator block_three
  Routine Break
  LoopInitiator block_four loopType="TrialHandler"
    conditionsFile = stim_present_data_block_4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_32.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_173.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_187.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_141.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', '    1'), ('imageTL', 'LZ_natural\\LZ_natural_224.jpg'), ('imageBL', 'LZ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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_135.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_106.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_111.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_141.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', '    1'), ('imageTL', 'LZ_scrambled\\LZ_scrambled_182.jp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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_88.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_193.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_148.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_121.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_47.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_25.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_71.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_181.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_231.jpg'), ('imageten', 'LZ_noise\\LZ_noise_173.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_212.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_18.jpg'), ('imagethirteen', '     '), ('imagefourteen', '  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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_76.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_35.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_41.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_154.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_216.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_164.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_230.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_220.jpg'), ('imagenine', 'LZ_scrambled\\LZ_scrambled_103.jpg'), ('imageten', 'LZ_scrambled\\LZ_scrambled_129.jpg'), ('imageeleven', 'LZ_scrambled\\LZ_scrambled_78.jpg'), ('image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
    Routine Cross_and_control
    LoopInitiator fone_control_b4 loopType="TrialHandler"
      loopType = random
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b4
    LoopInitiator ftwo_control_b4 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b4
    LoopInitiator fthree_control_b4 loopType="TrialHandler"
      loopType = random
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b4
    Routine choice
  LoopTerminator block_four
  Routine End
