PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new_STLI
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Routines
  Routine trial
    ImageComponent Topleft
      image [set every repeat] = $imageTL
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Topright
      image [set every repeat] = $imageTR
      pos = (0.25 , 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomleft
      image [set every repeat] = $imageBL
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomright
      image [set every repeat] = $imageBR
      pos = (0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    TextComponent Fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'a','z','k','m'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      syncScreenRefresh = False
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  Routine rsvp
    PolygonComponent Cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
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  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        End
Flow
  Routine Welcome
  LoopInitiator block_one loopType="TrialHandler"
    conditionsFile = stim_present_data_block_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'C:\\LZ\natural\natural_119.jpg'), ('imagetwo', ' C:\\LZ\natural\natural_17.jpg'), ('imagethree', ' C:\\LZ\natural\natural_224.jpg'), ('imagefour', ' C:\\LZ\natural\natural_42.jpg'), ('frequency', 1), ('imageTL', 'C:\\LZ\natural\natural_20.jpg'), ('imageBL', ' C:\\LZ\natural\natural_17.jpg'), ('imageTR', ' C:\\LZ\natural\natural_93.jpg'), ('imageBR', ' C:\\LZ\natural\natural_73.jpg'), ('correct_answer', '     z')]),
      OrderedDict([('imageone', 'C:\\LZ\\final_scrambled\\scrambled_69.jpg'), ('imagetwo', ' C:\\LZ\\final_scrambled\\scrambled_180.jpg'), ('imagethree', ' C:\\LZ\\final_scrambled\\scrambled_185.jpg'), ('imagefour', ' C:\\LZ\\final_scrambled\\scrambled_96.jpg'), ('frequency', 4), ('imageTL', 'C:\\LZ\\final_scrambled\\scrambled_10.jpg'), ('imageBL', ' C:\\LZ\\final_scrambled\\scrambled_137.jpg'), ('imageTR', ' C:\\LZ\\final_scrambled\\scrambled_185.jpg'), ('imageBR', ' C:\\LZ\\final_scrambled\\scrambled_221.jpg'), ('correct_answer', '     k')]),
      OrderedDict([('imageone', 'C:\\LZ\noise\noise_221.jpg'), ('imagetwo', ' C:\\LZ\noise\noise_96.jpg'), ('imagethree', ' C:\\LZ\noise\noise_82.jpg'), ('imagefour', ' C:\\LZ\noise\noise_169.jpg'), ('frequency', 4), ('imageTL', 'C:\\LZ\noise\noise_105.jpg'), ('imageBL', ' C:\\LZ\noise\noise_96.jpg'), ('imageTR', ' C:\\LZ\noise\noise_37.jpg'), ('imageBR', ' C:\\LZ\noise\noise_23.jpg'), ('correct_answer', '     z')]),
      OrderedDict([('imageone', 'C:\\LZ\natural\natural_77.jpg'), ('imagetwo', ' C:\\LZ\natural\natural_190.jpg'), ('imagethree', ' C:\\LZ\natural\natural_6.jpg'), ('imagefour', ' C:\\LZ\natural\natural_229.jpg'), ('frequency', 2), ('imageTL', 'C:\\LZ\natural\natural_126.jpg'), ('imageBL', ' C:\\LZ\natural\natural_121.jpg'), ('imageTR', ' C:\\LZ\natural\natural_6.jpg'), ('imageBR', ' C:\\LZ\natural\natural_43.jpg'), ('correct_answer', '     k')])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
    Routine rsvp
    Routine trial
  LoopTerminator block_one
  Routine End
