PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = new_STLI_practise
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press the Space key to start the experiment
    KeyboardComponent Welcome_enter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        End
  Routine Break
    TextComponent text_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Time for a break

        Press either of the keys "v" , "b" or "n" to continue when ready
    KeyboardComponent key_resp_2
      allowedKeys = 'v','n','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rsvp_f1
    ImageComponent Presentation_image_f1_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ParallelOutComponent EEG_trigger_f1
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine choice
    PolygonComponent Fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Topleft
      image [set every repeat] = $imageTL
      pos = (-0.25, 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Topright
      image [set every repeat] = $imageTR
      pos = (0.25 , 0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomleft
      image [set every repeat] = $imageBL
      pos = (-0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    ImageComponent Bottomright
      image [set every repeat] = $imageBR
      pos = (0.25, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','z','k','m'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine rsvp_f2
    ImageComponent Presentation_image_f2_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.45
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    ParallelOutComponent EEG_trigger_f2
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f3
    ImageComponent Presentation_image_f3_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.30
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    ImageComponent Presentation_image_f3_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent EEG_trigger_f3
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine Cross_and_control
    PolygonComponent Crossm
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent Freq_choice_control
      Code Type = Py
      Begin Routine:
        if frequency == 1:
            dofone = 1
            doftwo = 0
            dofthree = 0
            doffour = 0

        elif frequency == 2:
            dofone = 0
            doftwo = 1
            dofthree = 0
            doffour = 0

        elif frequency == 3:
            dofone = 0
            doftwo = 0
            dofthree = 1
            doffour = 0

        elif frequency == 4:
            dofone = 0
            doftwo = 0
            dofthree = 0
            doffour = 1
Flow
  Routine Welcome
  LoopInitiator block_one loopType="TrialHandler"
    conditionsFile = stim_practise_data_block_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_180.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_80.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_234.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_35.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_204.jpg'), ('imageBL', 'LZ_natura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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_107.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_123.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_153.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_151.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_198.jpg'), ('imageBL', 'LZ_natur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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_87.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_22.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_74.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_179.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_29.jpg'), ('imageBL', 'LZ_natural\\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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_191.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_150.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_235.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_205.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_206.jpg'), ('imageBL', 'LZ_natur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
    Routine Cross_and_control
    LoopInitiator fone_control_b1 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b1
    LoopInitiator ftwo_control_b1 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b1
    LoopInitiator fthree_control_b1 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b1
    Routine choice
  LoopTerminator block_one
  Routine Break
  LoopInitiator block_two loopType="TrialHandler"
    conditionsFile = stim_present_data_block_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_228.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_232.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_175.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_52.jpg'), ('frequency', 3), ('imageTL', 'LZ_scrambled\\LZ_scrambled_92.jpg'), ('imageBL', 'LZ_scrambled\\LZ_scrambled_142.jpg'), ('imageTR', 'LZ_scrambled\\LZ_scrambled_237.jpg'), ('imageBR', 'LZ_scrambled\\LZ_scrambled_52.jpg'), ('correct_answer', '    m')]),
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_155.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_2.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_181.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_160.jpg'), ('frequency', 2), ('imageTL', 'LZ_natural\\LZ_natural_96.jpg'), ('imageBL', 'LZ_natural\\LZ_natural_2.jpg'), ('imageTR', 'LZ_natural\\LZ_natural_103.jpg'), ('imageBR', 'LZ_natural\\LZ_natural_221.jpg'), ('correct_answer', '    z')]),
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_61.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_105.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_104.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_70.jpg'), ('frequency', 4), ('imageTL', 'LZ_natural\\LZ_natural_61.jpg'), ('imageBL', 'LZ_natural\\LZ_natural_65.jpg'), ('imageTR', 'LZ_natural\\LZ_natural_69.jpg'), ('imageBR', 'LZ_natural\\LZ_natural_130.jpg'), ('correct_answer', '    a')]),
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_44.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_140.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_225.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_59.jpg'), ('frequency', 3), ('imageTL', 'LZ_natural\\LZ_natural_93.jpg'), ('imageBL', 'LZ_natural\\LZ_natural_140.jpg'), ('imageTR', 'LZ_natural\\LZ_natural_102.jpg'), ('imageBR', 'LZ_natural\\LZ_natural_209.jpg'), ('correct_answer', '    z')])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
    Routine Cross_and_control
    LoopInitiator fone_control_b2 loopType="TrialHandler"
      loopType = random
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b2
    LoopInitiator ftwo_control_b2 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b2
    LoopInitiator fthree_control_b2 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b2
    Routine choice
  LoopTerminator block_two
  Routine Break
  LoopInitiator block_three loopType="TrialHandler"
    conditionsFile = stim_present_data_block_3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_199.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_198.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_35.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_2.jpg'), ('frequency', 3), ('imageTL', 'LZ_natural\\LZ_natural_67.jpg'), ('imageBL', 'LZ_natural\\LZ_natural_198.jpg'), ('imageTR', 'LZ_natural\\LZ_natural_9.jpg'), ('imageBR', 'LZ_natural\\LZ_natural_113.jpg'), ('correct_answer', '    z')]),
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_75.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_218.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_69.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_136.jpg'), ('frequency', 3), ('imageTL', 'LZ_noise\\LZ_noise_75.jpg'), ('imageBL', 'LZ_noise\\LZ_noise_123.jpg'), ('imageTR', 'LZ_noise\\LZ_noise_49.jpg'), ('imageBR', 'LZ_noise\\LZ_noise_202.jpg'), ('correct_answer', '    a')]),
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_146.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_98.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_175.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_221.jpg'), ('frequency', 3), ('imageTL', 'LZ_natural\\LZ_natural_161.jpg'), ('imageBL', 'LZ_natural\\LZ_natural_97.jpg'), ('imageTR', 'LZ_natural\\LZ_natural_175.jpg'), ('imageBR', 'LZ_natural\\LZ_natural_185.jpg'), ('correct_answer', '    k')]),
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_82.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_34.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_116.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_106.jpg'), ('frequency', 2), ('imageTL', 'LZ_scrambled\\LZ_scrambled_78.jpg'), ('imageBL', 'LZ_scrambled\\LZ_scrambled_1.jpg'), ('imageTR', 'LZ_scrambled\\LZ_scrambled_116.jpg'), ('imageBR', 'LZ_scrambled\\LZ_scrambled_167.jpg'), ('correct_answer', '    k')])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
    Routine Cross_and_control
    LoopInitiator fone_control_b3 loopType="TrialHandler"
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b3
    LoopInitiator ftwo_control_b3 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b3
    LoopInitiator fthree_control_b3 loopType="TrialHandler"
      loopType = random
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b3
    Routine choice
  LoopTerminator block_three
  Routine Break
  LoopInitiator block_four loopType="TrialHandler"
    conditionsFile = stim_present_data_block_4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_82.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_173.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_215.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_188.jpg'), ('frequency', 4), ('imageTL', 'LZ_scrambled\\LZ_scrambled_82.jpg'), ('imageBL', 'LZ_scrambled\\LZ_scrambled_38.jpg'), ('imageTR', 'LZ_scrambled\\LZ_scrambled_171.jpg'), ('imageBR', 'LZ_scrambled\\LZ_scrambled_80.jpg'), ('correct_answer', '    a')]),
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_114.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_75.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_27.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_180.jpg'), ('frequency', 1), ('imageTL', 'LZ_scrambled\\LZ_scrambled_236.jpg'), ('imageBL', 'LZ_scrambled\\LZ_scrambled_17.jpg'), ('imageTR', 'LZ_scrambled\\LZ_scrambled_27.jpg'), ('imageBR', 'LZ_scrambled\\LZ_scrambled_188.jpg'), ('correct_answer', '    k')]),
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_53.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_115.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_208.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_11.jpg'), ('frequency', 3), ('imageTL', 'LZ_natural\\LZ_natural_78.jpg'), ('imageBL', 'LZ_natural\\LZ_natural_94.jpg'), ('imageTR', 'LZ_natural\\LZ_natural_153.jpg'), ('imageBR', 'LZ_natural\\LZ_natural_11.jpg'), ('correct_answer', '    m')]),
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_48.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_3.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_96.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_24.jpg'), ('frequency', 3), ('imageTL', 'LZ_scrambled\\LZ_scrambled_137.jpg'), ('imageBL', 'LZ_scrambled\\LZ_scrambled_3.jpg'), ('imageTR', 'LZ_scrambled\\LZ_scrambled_82.jpg'), ('imageBR', 'LZ_scrambled\\LZ_scrambled_22.jpg'), ('correct_answer', '    z')])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
    Routine Cross_and_control
    LoopInitiator fone_control_b4 loopType="TrialHandler"
      loopType = random
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b4
    LoopInitiator ftwo_control_b4 loopType="TrialHandler"
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b4
    LoopInitiator fthree_control_b4 loopType="TrialHandler"
      loopType = random
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b4
    Routine choice
  LoopTerminator block_four
  Routine End
