PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = new_STLI_practise_natural
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press the Space key to start the experiment


        During the choice section , Press the key 'a' for was present in stream and 'l' for was not present in stream
    KeyboardComponent Welcome_enter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        End
  Routine Break
    TextComponent text_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Time for a break

        Press either of the keys "v" , "b" or "n" to continue when ready
    KeyboardComponent key_resp_2
      allowedKeys = 'v','n','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rsvp_f1
    ImageComponent Presentation_image_f1_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ParallelOutComponent EEG_trigger_f1
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine choice
    PolygonComponent Fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent displayed_choice_image
      image [set every repeat] = $choice_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent perf_code
      Code Type = Py
      Before Experiment:
        total_trials = 0
        count_acc = -1
      End Routine:
        total_trials = total_trials + 1

        count_acc = count_acc + key_resp.corr

        avg_acc = count_acc / total_trials
  Routine rsvp_f2
    ImageComponent Presentation_image_f2_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.45
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    ParallelOutComponent EEG_trigger_f2
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f3
    ImageComponent Presentation_image_f3_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.30
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    ImageComponent Presentation_image_f3_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent EEG_trigger_f3
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine Cross_and_control
    PolygonComponent Crossm
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent Freq_choice_control
      Code Type = Py
      Begin Routine:
        if frequency == 1:
            dofone = 1
            doftwo = 0
            dofthree = 0
            doffour = 0

        elif frequency == 2:
            dofone = 0
            doftwo = 1
            dofthree = 0
            doffour = 0

        elif frequency == 3:
            dofone = 0
            doftwo = 0
            dofthree = 1
            doffour = 0

        elif frequency == 4:
            dofone = 0
            doftwo = 0
            dofthree = 0
            doffour = 1
  Routine perf_review
    TextComponent perf_review_accuracyval
      letterHeight = 0.05
      pos = (0,- 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $avg_acc
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    KeyboardComponent perf_key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Accuracy in current block 
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Flow
  Routine Welcome
  LoopInitiator block_one loopType="TrialHandler"
    conditionsFile = stim_practise_data_block_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_180.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_80.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_234.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_35.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_204.jpg'), ('imageBL', 'LZ_natura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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_107.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_123.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_153.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_151.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_198.jpg'), ('imageBL', 'LZ_natur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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_87.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_22.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_74.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_179.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_29.jpg'), ('imageBL', 'LZ_natural\\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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_191.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_150.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_235.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_205.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_natural\\LZ_natural_206.jpg'), ('imageBL', 'LZ_natur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
    Routine Cross_and_control
    LoopInitiator fone_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b1
    LoopInitiator ftwo_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b1
    LoopInitiator fthree_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b1
    Routine choice
  LoopTerminator block_one
  Routine perf_review
  Routine Break
  LoopInitiator block_two loopType="TrialHandler"
    conditionsFile = stim_practise_data_block_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_228.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_30.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_61.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_211.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_scrambled\\LZ_scrambled_160.jpg'), ('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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_165.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_22.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_6.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_231.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_scrambled\\LZ_scrambled_88.jpg'), ('ima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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_116.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_207.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_159.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_83.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_scrambled\\LZ_scrambled_236.jpg'), ('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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_18.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_117.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_162.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_198.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_scrambled\\LZ_scrambled_103.jpg'), ('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
    Routine Cross_and_control
    LoopInitiator fone_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b2
    LoopInitiator ftwo_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b2
    LoopInitiator fthree_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b2
    Routine choice
  LoopTerminator block_two
  Routine Break
  LoopInitiator block_three loopType="TrialHandler"
    conditionsFile = stim_practise_data_block_3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_noise\\LZ_noise_136.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_208.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_44.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_164.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_noise\\LZ_noise_3.jpg'), ('imageBL', 'LZ_noise\\LZ_noise_208.jpg'), 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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_61.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_106.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_4.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_171.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_noise\\LZ_noise_139.jpg'), ('imageBL', 'LZ_noise\\LZ_noise_61.jpg'), ('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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_128.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_77.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_102.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_130.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_noise\\LZ_noise_19.jpg'), ('imageBL', 'LZ_noise\\LZ_noise_102.jpg'), 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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_58.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_32.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_170.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_146.jpg'), ('imagefive', '     '), ('imagesix', '     '), ('imageseven', '     '), ('imageeight', '     '), ('imagenine', '     '), ('imageten', '     '), ('imageeleven', '     '), ('imagetwelve', '     '), ('imagethirteen', '     '), ('imagefourteen', '     '), ('imagefifteen', '     '), ('imagesixteen', '     '), ('frequency', 1), ('imageTL', 'LZ_noise\\LZ_noise_192.jpg'), ('imageBL', 'LZ_noise\\LZ_noise_58.jpg'), (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
    Routine Cross_and_control
    LoopInitiator fone_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b3
    LoopInitiator ftwo_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b3
    LoopInitiator fthree_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b3
    Routine choice
  LoopTerminator block_three
  Routine End
