PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = new_STLI_updated
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press the Space key to start the experiment

        During the choice section , Press the key 'a' for was present in stream and 'l' for was not present in stream
    KeyboardComponent Welcome_enter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        End
  Routine Break
    TextComponent text_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Time for a break

        Press either of the keys "v" , "b" or "n" to continue when ready
    KeyboardComponent key_resp_2
      allowedKeys = 'v','n','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ParallelOutComponent EEG_trigger_break
      address = 0xD010
      disabled = True
      durationEstim = 4
      startData = 67
      startVal [time (s)] = 0
      stopData = 0
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f1
    ImageComponent Presentation_image_f1_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent Presentation_image_f1_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
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    ParallelOutComponent EEG_trigger_f1
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine choice
    PolygonComponent Fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent displayed_choice_image
      image [set every repeat] = $choice_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine rsvp_f2
    ImageComponent Presentation_image_f2_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.45
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    ImageComponent Presentation_image_f2_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.45
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    ParallelOutComponent EEG_trigger_f2
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine rsvp_f3
    ImageComponent Presentation_image_f3_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.30
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    ImageComponent Presentation_image_f3_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 2.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.70
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 3.35
      stopVal [duration (s)] = 0.3
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    ImageComponent Presentation_image_f3_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent EEG_trigger_f3
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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  Routine Cross_and_control
    PolygonComponent Crossm
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent Freq_choice_control
      Code Type = Py
      Begin Routine:
        if frequency == 1:
            dofone = 1
            doftwo = 0
            dofthree = 0
            doffour = 0

        elif frequency == 2:
            dofone = 0
            doftwo = 1
            dofthree = 0
            doffour = 0

        elif frequency == 3:
            dofone = 0
            doftwo = 0
            dofthree = 1
            doffour = 0

        elif frequency == 4:
            dofone = 0
            doftwo = 0
            dofthree = 0
            doffour = 1
  Routine rsvp_f4
    ImageComponent Presentation_image_f4_1
      image [set every repeat] = $imageone
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.20
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    ImageComponent Presentation_image_f4_2
      image [set every repeat] = $imagetwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_3
      image [set every repeat] = $imagethree
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_4
      image [set every repeat] = $imagefour
      size = (0.5, 0.5)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_5
      image [set every repeat] = $imagefive
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_6
      image [set every repeat] = $imagesix
      size = (0.5, 0.5)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_7
      image [set every repeat] = $imageseven
      size = (0.5, 0.5)
      startVal [time (s)] = 1.50
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_8
      image [set every repeat] = $imageeight
      size = (0.5, 0.5)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_9
      image [set every repeat] = $imagenine
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_10
      image [set every repeat] = $imageten
      size = (0.5, 0.5)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_11
      image [set every repeat] = $imageeleven
      size = (0.5, 0.5)
      startVal [time (s)] = 2.50
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_12
      image [set every repeat] = $imagetwelve
      size = (0.5, 0.5)
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_13
      image [set every repeat] = $imagethirteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f3_14
      image [set every repeat] = $imagefourteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_15
      image [set every repeat] = $imagefifteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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    ImageComponent Presentation_image_f4_16
      image [set every repeat] = $imagesixteen
      size = (0.5, 0.5)
      startVal [time (s)] = 3.75
      stopVal [duration (s)] = 0.2
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    ParallelOutComponent EEG_trigger_f4
      address = 0xD010
      disabled = True
      startData = $condition_code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 4
      syncScreen = True
      syncScreenRefresh = True
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Flow
  Routine Welcome
  LoopInitiator block_one loopType="TrialHandler"
    conditionsFile = stim_present_data_block_1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_142.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_33.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_223.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_3.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_200.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stimulu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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_208.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_221.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_139.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_24.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_135.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_45.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_18.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_119.jpg'), ('imagenine', 'LZ_scrambled\\LZ_scrambled_96.jpg'), ('imageten', 'LZ_scrambled\\LZ_scrambled_104.jpg'), ('imageeleven', 'LZ_scrambled\\LZ_scrambled_211.jpg'), ('image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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_131.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_63.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_174.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_116.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_193.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_34.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_118.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_234.jpg'), ('imagenine', 'LZ_scrambled\\LZ_scrambled_12.jpg'), ('imageten', 'LZ_scrambled\\LZ_scrambled_152.jpg'), ('imageeleven', 'LZ_scrambled\\LZ_scrambled_194.jpg'), ('imag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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_79.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_72.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_190.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_66.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_57.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_220.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_183.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_35.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 2), ('choice_image', 'LZ_noise\\L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
    Routine Cross_and_control
    LoopInitiator fone_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b1
    LoopInitiator ftwo_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b1
    LoopInitiator fthree_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b1
    LoopInitiator ffour_control_b1 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doffour
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      Routine rsvp_f4
    LoopTerminator ffour_control_b1
    Routine choice
  LoopTerminator block_one
  Routine Break
  LoopInitiator block_two loopType="TrialHandler"
    conditionsFile = stim_present_data_block_2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_48.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_23.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_22.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_97.jpg'), ('imagefive', 'LZ_scrambled\\LZ_scrambled_70.jpg'), ('imagesix', 'LZ_scrambled\\LZ_scrambled_31.jpg'), ('imageseven', 'LZ_scrambled\\LZ_scrambled_185.jpg'), ('imageeight', 'LZ_scrambled\\LZ_scrambled_67.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('images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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_55.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_99.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_82.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_224.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_21.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stimulus_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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_90.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_53.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_9.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_34.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_noise\\LZ_noise_53.jpg'), ('choice_type', 1), ('correct_answer', 'a'), ('stimulus_type', 3), ('condition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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_188.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_206.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_175.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_54.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_213.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_107.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_176.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_31.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_27.jpg'), ('imageten', 'LZ_noise\\LZ_noise_92.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_62.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_15.jpg'), ('imagethirteen', None), ('imagefourteen', None), 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
    Routine Cross_and_control
    LoopInitiator fone_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b2
    LoopInitiator ftwo_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b2
    LoopInitiator fthree_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b2
    LoopInitiator ffour_control_b2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doffour
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      Routine rsvp_f4
    LoopTerminator ffour_control_b2
    Routine choice
  LoopTerminator block_two
  Routine Break
  LoopInitiator block_three loopType="TrialHandler"
    conditionsFile = stim_present_data_block_3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_192.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_209.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_150.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_213.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_218.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stim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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_162.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_197.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_96.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_70.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_57.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_198.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_42.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_208.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_161.jpg'), ('imageten', 'LZ_noise\\LZ_noise_64.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_54.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_180.jpg'), ('imagethirteen', None), ('imagefourteen', None), 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,
      OrderedDict([('imageone', 'LZ_scrambled\\LZ_scrambled_125.jpg'), ('imagetwo', 'LZ_scrambled\\LZ_scrambled_95.jpg'), ('imagethree', 'LZ_scrambled\\LZ_scrambled_157.jpg'), ('imagefour', 'LZ_scrambled\\LZ_scrambled_51.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_scrambled\\LZ_scrambled_157.jpg'), ('choice_type', 1), ('correct_answ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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_184.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_82.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_181.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_208.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_82.jpg'), ('choice_type', 1), ('correct_answer', 'a'), ('stimulu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
    Routine Cross_and_control
    LoopInitiator fone_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b3
    LoopInitiator ftwo_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b3
    LoopInitiator fthree_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b3
    LoopInitiator ffour_control_b3 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doffour
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      Routine rsvp_f4
    LoopTerminator ffour_control_b3
    Routine choice
  LoopTerminator block_three
  Routine Break
  LoopInitiator block_four loopType="TrialHandler"
    conditionsFile = stim_present_data_block_4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_226.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_9.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_169.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_181.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_204.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_84.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_90.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_32.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_127.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_20.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_55.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_138.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_141.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_52.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_34.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_73.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_8.jpg'), ('imageten', 'LZ_natural\\LZ_natural_194.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_143.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_79.jpg'), ('im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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_216.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_188.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_211.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_217.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_228.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_199.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_236.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_163.jpg'), ('imagenine', 'LZ_natural\\LZ_natural_99.jpg'), ('imageten', 'LZ_natural\\LZ_natural_137.jpg'), ('imageeleven', 'LZ_natural\\LZ_natural_183.jpg'), ('imagetwelve', 'LZ_natural\\LZ_natural_182.jpg'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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_141.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_102.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_153.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_186.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_noise\\LZ_noise_88.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stimulus_type', 3), ('cond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
    Routine Cross_and_control
    LoopInitiator fone_control_b4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b4
    LoopInitiator ftwo_control_b4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b4
    LoopInitiator fthree_control_b4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b4
    Routine choice
  LoopTerminator block_four
  Routine Break
  LoopInitiator block_five loopType="TrialHandler"
    conditionsFile = stim_present_data_block_5.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageone', 'LZ_natural\\LZ_natural_2.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_120.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_36.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_64.jpg'), ('imagefive', 'LZ_natural\\LZ_natural_74.jpg'), ('imagesix', 'LZ_natural\\LZ_natural_139.jpg'), ('imageseven', 'LZ_natural\\LZ_natural_221.jpg'), ('imageeight', 'LZ_natural\\LZ_natural_231.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 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,
      OrderedDict([('imageone', 'LZ_natural\\LZ_natural_97.jpg'), ('imagetwo', 'LZ_natural\\LZ_natural_185.jpg'), ('imagethree', 'LZ_natural\\LZ_natural_145.jpg'), ('imagefour', 'LZ_natural\\LZ_natural_126.jpg'), ('imagefive', None), ('imagesix', None), ('imageseven', None), ('imageeight', None), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 1), ('choice_image', 'LZ_natural\\LZ_natural_6.jpg'), ('choice_type', 0), ('correct_answer', 'l'), ('stimulus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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_115.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_234.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_155.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_182.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_225.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_195.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_129.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_37.jpg'), ('imagenine', None), ('imageten', None), ('imageeleven', None), ('imagetwelve', None), ('imagethirteen', None), ('imagefourteen', None), ('imagefifteen', None), ('imagesixteen', None), ('frequency', 2), ('choice_image', 'LZ_nois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,
      OrderedDict([('imageone', 'LZ_noise\\LZ_noise_91.jpg'), ('imagetwo', 'LZ_noise\\LZ_noise_7.jpg'), ('imagethree', 'LZ_noise\\LZ_noise_165.jpg'), ('imagefour', 'LZ_noise\\LZ_noise_135.jpg'), ('imagefive', 'LZ_noise\\LZ_noise_26.jpg'), ('imagesix', 'LZ_noise\\LZ_noise_92.jpg'), ('imageseven', 'LZ_noise\\LZ_noise_48.jpg'), ('imageeight', 'LZ_noise\\LZ_noise_80.jpg'), ('imagenine', 'LZ_noise\\LZ_noise_125.jpg'), ('imageten', 'LZ_noise\\LZ_noise_221.jpg'), ('imageeleven', 'LZ_noise\\LZ_noise_9.jpg'), ('imagetwelve', 'LZ_noise\\LZ_noise_222.jpg'), ('imagethirteen', None), ('imagefourteen', None), ('i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
    Routine Cross_and_control
    LoopInitiator fone_control_b5 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofone
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      Routine rsvp_f1
    LoopTerminator fone_control_b5
    LoopInitiator ftwo_control_b5 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $doftwo
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      Routine rsvp_f2
    LoopTerminator ftwo_control_b5
    LoopInitiator fthree_control_b5 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $dofthree
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      Routine rsvp_f3
    LoopTerminator fthree_control_b5
    Routine choice
  LoopTerminator block_five
  Routine End
